PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  expName = exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instr
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    TextComponent text
      letterHeight = 25
      startVal [time (s)] = 0.0
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      text:
        Добрый день!

        Спасибо, что согласились принять участие в эксперименте! В процессе прохождения исследования вам необходимо будет запоминать расположение и цвета 4-х квадратов. Далее вам необходимо будет найти на экране букву T и отчитаться о положении буквы в пространстве посредством стрелок <- и ->. Если "хвост буквы Т" (ее нижняя часть) направлен влево, необходимо нажать на стрелку "влево" - <-. Если "хвост буквы Т" (ее нижняя часть) направлен вправо, необходимо нажать на стрелку "вправо"- ->. Далее вам необходимо будет ответить изменилась ли предъявляемая ранее конфигурация цветных квадратов. Если конфигурация не изменилась, нажмите на клавиатуре S (same), если же конфигурация изменилась, нажмите на клавиатуре D (different).

        Для продолжения нажмите "ПРОБЕЛ".
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine end
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    TextComponent text_2
      letterHeight = 20
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Спасибо за участие!

        Ничего не нажимайте, дождитесь полной загрузки файлов
    CodeComponent code_3
      Code Type = JS
      Begin JS Routine:
        // Отключаем скачивание через браузер
        psychoJS._saveResults = 0;

        // Именуем файлы
        let filename = psychoJS.experiment._participant +  '_' + psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';
        // Достаем дата обджект из эксперимента
        let dataObj = psychoJS._experiment._trialsData;
        // Конвертируем в csv
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString()
        }).join('\n')
        // Отправляем на OSF через DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
             },
             body: JSON.stringify({
                experimentID: 'H51PXszKneD1', // * DATAPIPE EXP ID*
                filename: filename,
                data: data,
             }),
        }).then(response => response.json()).then(data => {
        // Кидаем в консоль результат и выходим из эксперимента
            console.log(data);
            quitPsychoJS();
        })
  Routine recog
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    TextComponent fix1_1
      letterHeight = 50
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    PolygonComponent square_1
      fillColor [set every repeat] = $color_1
      lineColor [set every repeat] = $color_1
      pos [set every repeat] = (pos_sq_x1_1, pos_sq_y1_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.8
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    PolygonComponent square_2
      fillColor [set every repeat] = $color_2
      lineColor [set every repeat] = $color_2
      pos [set every repeat] = (pos_sq_x2_1, pos_sq_y2_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.8
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    PolygonComponent square_3
      fillColor [set every repeat] = $color_3
      lineColor [set every repeat] = $color_3
      pos [set every repeat] = (pos_sq_x3_1, pos_sq_y3_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.8
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    PolygonComponent square_4
      fillColor [set every repeat] = $color_4
      lineColor [set every repeat] = $color_4
      pos [set every repeat] = (pos_sq_x4_1, pos_sq_y4_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.8
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    KeyboardComponent key_resp_3
      allowedKeys = 's','d'
      correctAns = $cor_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instr_2
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    TextComponent text_3
      letterHeight = 25
      startVal [time (s)] = 0.0
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      text:
        Мы начнем с нескольких тестовых проб в качестве тренировки

        В ходе основной части эксперимента Вам будут давать небольшие перерывы раз в 1-2 мин

        Пожалуйста, старайтесь выполнять обе задачи с одинаковой эффективностью

        Если у Вас есть вопросы, задавайте их экспериментатору

        Нажмите ПРОБЕЛ, чтобы продолжить исследование
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine memor
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    TextComponent fix1
      letterHeight = 50
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    PolygonComponent square1
      fillColor [set every repeat] = $color_1
      lineColor [set every repeat] = $color_1
      pos [set every repeat] = (pos_sq_x1_1, pos_sq_y1_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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    PolygonComponent square2
      fillColor [set every repeat] = $color_2
      lineColor [set every repeat] = $color_2
      pos [set every repeat] = (pos_sq_x2_1, pos_sq_y2_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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    PolygonComponent square3
      fillColor [set every repeat] = $color_3
      lineColor [set every repeat] = $color_3
      pos [set every repeat] = (pos_sq_x3_1, pos_sq_y3_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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    PolygonComponent square4
      fillColor [set every repeat] = $color_4
      lineColor [set every repeat] = $color_4
      pos [set every repeat] = (pos_sq_x4_1, pos_sq_y4_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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    TextComponent fix2
      letterHeight = 50
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.5
      text = +
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  Routine vs
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    ImageComponent letter1
      image [set every repeat] = $letter1
      ori [set every repeat] = orient1
      pos [set every repeat] = (posx1, posy1)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent letter2
      image [set every repeat] = $letter2
      ori [set every repeat] = orient2
      pos [set every repeat] = (posx2, posy2)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent letter3
      image [set every repeat] = $letter3
      ori [set every repeat] = orient3
      pos [set every repeat] = (posx3, posy3)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent letter4
      image [set every repeat] = $letter4
      ori [set every repeat] = orient4
      pos [set every repeat] = (posx4, posy4)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent letter5
      image [set every repeat] = $letter5
      ori [set every repeat] = orient5
      pos [set every repeat] = (posx5, posy5)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent latter6
      image [set every repeat] = $letter6
      ori [set every repeat] = orient6
      pos [set every repeat] = (posx6, posy6)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent latter7
      image [set every repeat] = $letter7
      ori [set every repeat] = orient7
      pos [set every repeat] = (posx7, posy7)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent latter8
      image [set every repeat] = $letter8
      ori [set every repeat] = orient8
      pos [set every repeat] = (posx8, posy8)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent letter9
      image [set every repeat] = $letter9
      ori [set every repeat] = orient9
      pos [set every repeat] = (posx9, posy9)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent letter10
      image [set every repeat] = $letter10
      ori [set every repeat] = orient10
      pos [set every repeat] = (posx10, posy10)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent letter11
      image [set every repeat] = $letter11
      ori [set every repeat] = orient11
      pos [set every repeat] = (posx11, posy11)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent letter12
      image [set every repeat] = $letter12
      ori [set every repeat] = orient12
      pos [set every repeat] = (posx12, posy12)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_search
      allowedKeys = 'left','right'
      correctAns = $direction
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine recog_2
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  Routine practice_mem
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    TextComponent fix_1
      letterHeight = 50
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    PolygonComponent msquare_1
      fillColor [set every repeat] = $color_1
      lineColor [set every repeat] = $color_1
      pos [set every repeat] = (pos_sq_x1_1, pos_sq_y1_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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    PolygonComponent msquare_2
      fillColor [set every repeat] = $color_2
      lineColor [set every repeat] = $color_2
      pos [set every repeat] = (pos_sq_x2_1, pos_sq_y2_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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    PolygonComponent msquare_3
      fillColor [set every repeat] = $color_3
      lineColor [set every repeat] = $color_3
      pos [set every repeat] = (pos_sq_x3_1, pos_sq_y3_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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    PolygonComponent msquare_4
      fillColor [set every repeat] = $color_4
      lineColor [set every repeat] = $color_4
      pos [set every repeat] = (pos_sq_x4_1, pos_sq_y4_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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    TextComponent fix_2
      letterHeight = 50
      startVal [time (s)] = 0.6
      stopVal [duration (s)] = 0.5
      text = +
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  Routine practice_recog
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    TextComponent fix
      letterHeight = 50
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    PolygonComponent msquare1
      fillColor [set every repeat] = $color_1
      lineColor [set every repeat] = $color_1
      pos [set every repeat] = (pos_sq_x1_1, pos_sq_y1_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5.8
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    PolygonComponent msquare2
      fillColor [set every repeat] = $color_2
      lineColor [set every repeat] = $color_2
      pos [set every repeat] = (pos_sq_x2_1, pos_sq_y2_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5.8
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    PolygonComponent maquare3
      fillColor [set every repeat] = $color_3
      lineColor [set every repeat] = $color_3
      pos [set every repeat] = (pos_sq_x3_1, pos_sq_y3_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5.8
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    PolygonComponent msquare4
      fillColor [set every repeat] = $color_4
      lineColor [set every repeat] = $color_4
      pos [set every repeat] = (pos_sq_x4_1, pos_sq_y4_1)
      shape = rectangle
      size = (40, 40)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5.8
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    KeyboardComponent answ
      allowedKeys = 's','d'
      correctAns = $cor_ans
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine fb_vs
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    CodeComponent code
      Code Type = JS
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      Begin JS Experiment:
        msg = "";
        msg_color = "";
      Begin JS Routine:
        if ((resp_vs.corr === 1)) {
            msg = "\u041f\u0440\u0430\u0432\u0438\u043b\u044c\u043d\u043e";
            msg_color = "green";
        } else {
            msg = "\u041d\u0435\u043f\u0440\u0430\u0432\u0438\u043b\u044c\u043d\u043e";
            msg_color = "red";
        }
    TextComponent feedback_vs
      color [set every repeat] = $msg_color
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine fb_recog
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    CodeComponent code_2
      Code Type = JS
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      Begin JS Experiment:
        mes = "";
        mes_color = "";
      Begin JS Routine:
        if ((answ.corr === 1)) {
            mes = "\u041f\u0440\u0430\u0432\u0438\u043b\u044c\u043d\u043e";
            mes_color = "green";
        } else {
            mes = "\u041d\u0435\u043f\u0440\u0430\u0432\u0438\u043b\u044c\u043d\u043e";
            mes_color = "red";
        }
    TextComponent feedback_memory
      color [set every repeat] = $mes_color
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $mes
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  Routine instr_3
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    TextComponent text_4
      letterHeight = 25
      startVal [time (s)] = 0.0
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      text:
        Тестовая часть завершена!

        В основной экспериментальной части обратная связь предъявляться не будет.

        Помните, что необходимо нажимать клавишу "S", если положение точки НЕ соответствует одной из ранее предъявленных; клавишу "D", если положение точки соответствует одной из ранее предъявленных.

        Нажмите ПРОБЕЛ, чтобы перейти к основной части эксперимента.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine pause
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    TextComponent pause_text
      letterHeight = 50
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine vs_2
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    ImageComponent image_1
      image [set every repeat] = $letter1
      ori [set every repeat] = orient1
      pos [set every repeat] = (posx1, posy1)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $letter2
      ori [set every repeat] = orient2
      pos [set every repeat] = (posx2, posy2)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image [set every repeat] = $letter3
      ori [set every repeat] = orient3
      pos [set every repeat] = (posx3, posy3)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image [set every repeat] = $letter4
      ori [set every repeat] = orient4
      pos [set every repeat] = (posx4, posy4)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image [set every repeat] = $letter5
      ori [set every repeat] = orient5
      pos [set every repeat] = (posx5, posy5)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      image [set every repeat] = $letter6
      ori [set every repeat] = orient6
      pos [set every repeat] = (posx6, posy6)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image_7
      image [set every repeat] = $letter7
      ori [set every repeat] = orient7
      pos [set every repeat] = (posx7, posy7)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image_8
      image [set every repeat] = $letter8
      ori [set every repeat] = orient8
      pos [set every repeat] = (posx8, posy8)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image_9
      image [set every repeat] = $letter9
      ori [set every repeat] = orient9
      pos [set every repeat] = (posx9, posy9)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image_10
      image [set every repeat] = $letter10
      ori [set every repeat] = orient10
      pos [set every repeat] = (posx10, posy10)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image_11
      image [set every repeat] = $letter11
      ori [set every repeat] = orient11
      pos [set every repeat] = (posx11, posy11)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image_12
      image [set every repeat] = $letter12
      ori [set every repeat] = orient12
      pos [set every repeat] = (posx12, posy12)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp_vs
      allowedKeys = 'left','right'
      correctAns = $direction
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine instr_4
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    TextComponent text_5
      letterHeight = 25
      startVal [time (s)] = 0.0
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      text:
        Основная часть эксперимента подошла к концу. Половина экранов, которые Вы видели, повторялась в течение эксперимента. Сейчас Вам будет показано 12 экранов, которые повторялись в течение эксперимента, и 12 совершенно новых экранов.

        Нажмите клавишу со стрелкой, чтобы ответить, предъявлялся ли этот экран ранее:
        стрелка влево (<-), если экран НЕ предъявлялся и Вы видите его впервые;
        стрелка вправо (->), если экран ранее предъявлялся несколько раз в течение эксперимента.

        Пожалуйста, отвечайте как можно точнее.

        Нажмите ПРОБЕЛ, чтобы перейти к заданию.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine final_recog
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    KeyboardComponent recog_ans
      allowedKeys = 'left','right'
      correctAns = $direction
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent image1
      image [set every repeat] = $letter1
      ori [set every frame] = orient1
      pos [set every repeat] = (posx1, posy1)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image [set every repeat] = $letter2
      ori [set every frame] = orient2
      pos [set every repeat] = (posx2, posy2)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image [set every repeat] = $letter3
      ori [set every frame] = orient3
      pos [set every repeat] = (posx3, posy3)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image [set every repeat] = $letter4
      ori [set every frame] = orient4
      pos [set every repeat] = (posx4, posy4)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image5
      image [set every repeat] = $letter5
      ori [set every frame] = orient5
      pos [set every repeat] = (posx5, posy5)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image6
      image [set every repeat] = $letter6
      ori [set every frame] = orient6
      pos [set every repeat] = (posx6, posy6)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image7
      image [set every repeat] = $letter7
      ori [set every frame] = orient7
      pos [set every repeat] = (posx7, posy7)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image8
      image [set every repeat] = $letter8
      ori [set every frame] = orient8
      pos [set every repeat] = (posx8, posy8)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image9
      image [set every repeat] = $letter9
      ori [set every frame] = orient9
      pos [set every repeat] = (posx9, posy9)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image10
      image [set every repeat] = $letter10
      ori [set every frame] = orient10
      pos [set every repeat] = (posx10, posy10)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image11
      image [set every repeat] = $letter11
      ori [set every frame] = orient11
      pos [set every repeat] = (posx11, posy11)
      size = (50, 50)
      startVal [time (s)] = 0.0
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    ImageComponent image12
      image [set every repeat] = $letter12
      ori [set every frame] = orient12
      pos [set every repeat] = (posx12, posy12)
      size = (50, 50)
      startVal [time (s)] = 0.0
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  CounterbalanceRoutine counterbalance
    endExperimentOnDepletion = ignore
    nGroups = 2
    nReps = 1
    nSlots = 10
    saveData = True
    saveRemaining = True
    specMode = uniform
  Routine fix_3
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    TextComponent text_6
      letterHeight = 50
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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Flow
  Routine instr
  Routine instr_2
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = test_phase_200.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'posx1': -227, 'posx2': -23, 'posx3': -79, 'posx4': -71, 'posx5': -225, 'posx6': -29, 'posx7': 77, 'posx8': 171, 'posx9': 224, 'posx10': 173, 'posx11': 74, 'posx12': 123, 'posy1': -227, 'posy2': -174, 'posy3': -128, 'posy4': 71, 'posy5': 120, 'posy6': 20, 'posy7': -126, 'posy8': -29, 'posy9': -230, 'posy10': 223, 'posy11': 173, 'posy12': 78, 'orient1': 90, 'orient2': 270, 'orient3': 270, 'orient4': 0, 'orient5': 90, 'orient6': 180, 'orient7': 270, 'orient8': 0, 'orient9': 180, 'orient10': 0, 'orient11': 180, 'orient12': 90, 'letter1': 'L0.png', 'letter2': 'L0.png', 'letter3': 'L0.png', 'lett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,
      {'posx1': -174, 'posx2': -72, 'posx3': -227, 'posx4': -172, 'posx5': -128, 'posx6': -70, 'posx7': 130, 'posx8': 79, 'posx9': 223, 'posx10': 28, 'posx11': 222, 'posx12': 73, 'posy1': -76, 'posy2': -120, 'posy3': -22, 'posy4': 22, 'posy5': 172, 'posy6': 72, 'posy7': -172, 'posy8': -221, 'posy9': -123, 'posy10': 130, 'posy11': 21, 'posy12': 224, 'orient1': 180, 'orient2': 270, 'orient3': 0, 'orient4': 270, 'orient5': 90, 'orient6': 90, 'orient7': 0, 'orient8': 90, 'orient9': 180, 'orient10': 180, 'orient11': 0, 'orient12': 270, 'letter1': 'L0.png', 'letter2': 'L0.png', 'letter3': 'L0.png', 'lette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,
      {'posx1': -77, 'posx2': -224, 'posx3': -177, 'posx4': -126, 'posx5': -172, 'posx6': -77, 'posx7': 78, 'posx8': 123, 'posx9': 226, 'posx10': 173, 'posx11': 79, 'posx12': 129, 'posy1': -75, 'posy2': -174, 'posy3': -27, 'posy4': 27, 'posy5': 127, 'posy6': 180, 'posy7': -128, 'posy8': -73, 'posy9': -23, 'posy10': 124, 'posy11': 175, 'posy12': 30, 'orient1': 180, 'orient2': 0, 'orient3': 0, 'orient4': 270, 'orient5': 180, 'orient6': 180, 'orient7': 90, 'orient8': 0, 'orient9': 90, 'orient10': 270, 'orient11': 90, 'orient12': 270, 'letter1': 'L0.png', 'letter2': 'L0.png', 'letter3': 'L0.png', 'lette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,
      {'posx1': -122, 'posx2': -229, 'posx3': -177, 'posx4': -230, 'posx5': -23, 'posx6': -74, 'posx7': 125, 'posx8': 179, 'posx9': 225, 'posx10': 77, 'posx11': 173, 'posx12': 27, 'posy1': -26, 'posy2': -170, 'posy3': -229, 'posy4': 123, 'posy5': 229, 'posy6': 74, 'posy7': -24, 'posy8': -70, 'posy9': -175, 'posy10': 120, 'posy11': 74, 'posy12': 225, 'orient1': 180, 'orient2': 90, 'orient3': 0, 'orient4': 0, 'orient5': 90, 'orient6': 270, 'orient7': 270, 'orient8': 180, 'orient9': 270, 'orient10': 180, 'orient11': 0, 'orient12': 90, 'letter1': 'L0.png', 'letter2': 'L0.png', 'letter3': 'L0.png', 'lett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
    Routine practice_mem
    Routine vs_2
    Routine fb_vs
    Routine practice_recog
    Routine fb_recog
    Routine pause
  LoopTerminator practice_trials
  Routine instr_3
  LoopInitiator main_phase loopType="TrialHandler"
    conditionsFile = main_trials_200.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'posx1': -179, 'posx2': -225, 'posx3': -25, 'posx4': -175, 'posx5': -73, 'posx6': -25, 'posx7': 227, 'posx8': 73, 'posx9': 179, 'posx10': 71, 'posx11': 176, 'posx12': 229, 'posy1': -178, 'posy2': -77, 'posy3': -29, 'posy4': 124, 'posy5': 172, 'posy6': 80, 'posy7': -75, 'posy8': -171, 'posy9': -125, 'posy10': 229, 'posy11': 171, 'posy12': 123, 'orient1': 180, 'orient2': 0, 'orient3': 270, 'orient4': 0, 'orient5': 270, 'orient6': 270, 'orient7': 180, 'orient8': 180, 'orient9': 90, 'orient10': 0, 'orient11': 90, 'orient12': 90, 'letter1': 'L0.png', 'letter2': 'L0.png', 'letter3': 'T0.png', 'let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,
      {'posx1': -129, 'posx2': -75, 'posx3': -178, 'posx4': -80, 'posx5': -225, 'posx6': -130, 'posx7': 120, 'posx8': 25, 'posx9': 71, 'posx10': 226, 'posx11': 28, 'posx12': 176, 'posy1': -223, 'posy2': -126, 'posy3': -174, 'posy4': 123, 'posy5': 74, 'posy6': 28, 'posy7': -77, 'posy8': -130, 'posy9': -178, 'posy10': 125, 'posy11': 25, 'posy12': 227, 'orient1': 180, 'orient2': 90, 'orient3': 90, 'orient4': 270, 'orient5': 270, 'orient6': 0, 'orient7': 0, 'orient8': 0, 'orient9': 180, 'orient10': 270, 'orient11': 270, 'orient12': 180, 'letter1': 'L0.png', 'letter2': 'L0.png', 'letter3': 'L0.png', 'let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,
      {'posx1': -23, 'posx2': -224, 'posx3': -127, 'posx4': -72, 'posx5': -223, 'posx6': -172, 'posx7': 228, 'posx8': 79, 'posx9': 126, 'posx10': 28, 'posx11': 74, 'posx12': 123, 'posy1': -179, 'posy2': -23, 'posy3': -122, 'posy4': 177, 'posy5': 122, 'posy6': 25, 'posy7': -174, 'posy8': -124, 'posy9': -226, 'posy10': 123, 'posy11': 73, 'posy12': 228, 'orient1': 180, 'orient2': 270, 'orient3': 180, 'orient4': 0, 'orient5': 270, 'orient6': 180, 'orient7': 90, 'orient8': 90, 'orient9': 270, 'orient10': 0, 'orient11': 0, 'orient12': 90, 'letter1': 'L0.png', 'letter2': 'L0.png', 'letter3': 'L0.png', 'let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,
      {'posx1': -26, 'posx2': -74, 'posx3': -178, 'posx4': -130, 'posx5': -21, 'posx6': -174, 'posx7': 71, 'posx8': 174, 'posx9': 223, 'posx10': 128, 'posx11': 26, 'posx12': 176, 'posy1': -127, 'posy2': -176, 'posy3': -227, 'posy4': 176, 'posy5': 25, 'posy6': 120, 'posy7': -125, 'posy8': -26, 'posy9': -78, 'posy10': 226, 'posy11': 127, 'posy12': 177, 'orient1': 180, 'orient2': 270, 'orient3': 90, 'orient4': 90, 'orient5': 0, 'orient6': 180, 'orient7': 0, 'orient8': 90, 'orient9': 270, 'orient10': 0, 'orient11': 180, 'orient12': 90, 'letter1': 'L0.png', 'letter2': 'L0.png', 'letter3': 'L0.png', 'lett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
    Routine memor
    Routine vs_2
    Routine recog
    Routine pause
  LoopTerminator main_phase
  Routine instr_4
  LoopInitiator recognition loopType="TrialHandler"
    conditionsFile = recog_phase.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'posx1': -224, 'posx2': -78, 'posx3': -173, 'posx4': -121, 'posx5': -221, 'posx6': -29, 'posx7': 172, 'posx8': 71, 'posx9': 130, 'posx10': 228, 'posx11': 23, 'posx12': 79, 'posy1': -29, 'posy2': -178, 'posy3': -72, 'posy4': 229, 'posy5': 71, 'posy6': 124, 'posy7': -77, 'posy8': -26, 'posy9': -127, 'posy10': 130, 'posy11': 71, 'posy12': 177, 'orient1': 180, 'orient2': 180, 'orient3': 90, 'orient4': 0, 'orient5': 0, 'orient6': 270, 'orient7': 0, 'orient8': 270, 'orient9': 90, 'orient10': 90, 'orient11': 180, 'orient12': 270, 'letter1': 'L0.png', 'letter2': 'L0.png', 'letter3': 'T0.png', 'lette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,
      {'posx1': -78, 'posx2': -225, 'posx3': -174, 'posx4': -75, 'posx5': -20, 'posx6': -177, 'posx7': 78, 'posx8': 120, 'posx9': 178, 'posx10': 120, 'posx11': 178, 'posx12': 223, 'posy1': -229, 'posy2': -23, 'posy3': -76, 'posy4': 74, 'posy5': 24, 'posy6': 176, 'posy7': -71, 'posy8': -177, 'posy9': -28, 'posy10': 222, 'posy11': 179, 'posy12': 72, 'orient1': 270, 'orient2': 0, 'orient3': 90, 'orient4': 180, 'orient5': 90, 'orient6': 90, 'orient7': 180, 'orient8': 270, 'orient9': 0, 'orient10': 270, 'orient11': 180, 'orient12': 0, 'letter1': 'L0.png', 'letter2': 'L0.png', 'letter3': 'L0.png', 'letter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,
      {'posx1': -76, 'posx2': -127, 'posx3': -177, 'posx4': -229, 'posx5': -176, 'posx6': -23, 'posx7': 74, 'posx8': 125, 'posx9': 174, 'posx10': 179, 'posx11': 21, 'posx12': 225, 'posy1': -76, 'posy2': -177, 'posy3': -227, 'posy4': 75, 'posy5': 173, 'posy6': 227, 'posy7': -23, 'posy8': -174, 'posy9': -225, 'posy10': 26, 'posy11': 225, 'posy12': 124, 'orient1': 180, 'orient2': 270, 'orient3': 90, 'orient4': 270, 'orient5': 0, 'orient6': 0, 'orient7': 180, 'orient8': 270, 'orient9': 0, 'orient10': 90, 'orient11': 90, 'orient12': 180, 'letter1': 'L0.png', 'letter2': 'L0.png', 'letter3': 'L0.png', 'let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,
      {'posx1': -174, 'posx2': -226, 'posx3': -21, 'posx4': -224, 'posx5': -179, 'posx6': -121, 'posx7': 72, 'posx8': 223, 'posx9': 177, 'posx10': 124, 'posx11': 221, 'posx12': 76, 'posy1': -223, 'posy2': -122, 'posy3': -173, 'posy4': 28, 'posy5': 121, 'posy6': 226, 'posy7': -123, 'posy8': -177, 'posy9': -74, 'posy10': 126, 'posy11': 71, 'posy12': 229, 'orient1': 90, 'orient2': 180, 'orient3': 270, 'orient4': 180, 'orient5': 90, 'orient6': 90, 'orient7': 0, 'orient8': 0, 'orient9': 0, 'orient10': 270, 'orient11': 270, 'orient12': 180, 'letter1': 'L0.png', 'letter2': 'L0.png', 'letter3': 'L0.png', 'l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
    Routine fix_3
    Routine final_recog
  LoopTerminator recognition
  Routine end
